WorkflowBuilder(Version=2.8.2)
GroupWorkflow Parameters
    StringProperty(Value=Rat022)
    -> GroupWorkflow "<<Enter AnimalID RatXXX OR TSHXXX" => #1
        WorkflowInput Source1
        -> WorkflowOutput
    -> Format(Format={0}_Parameters_.csv, Selector="")
    -> PropertyMapping(FileName) => #3
    #1 -> Disable Zip
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #5
      Expression:
        new(
        it.Item1 as AnimalID,
        it.Item2 as EyeMovementMagThresh,
        it.Item3 as EyeMovementTimeWindow,
        it.Item4 as Acceptance_Angle,
        it.Item5 as TrialStartGreenCircleDur,
        it.Item6 as StimStartWhiteCircleDur)
    #3, #5 -> Disable Bonsai.IO.CsvWriter(FileName=Tsh01_Parameters_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> WorkflowOutput
    #1 -> Format(Format={0}\\{0}_H_L_.avi)
    -> ReplaySubject ID_HeadLEFT(BufferSize=nil)
    #1 -> Format(Format={0}\\{0}_E_L_.avi)
    -> ReplaySubject ID_EyeLEFT(BufferSize=nil)
    #1 -> Format(Format={0}\\{0}_H_R_.avi)
    -> ReplaySubject ID_HeadRIGHT(BufferSize=nil)
    #1 -> Format(Format={0}\\{0}_E_R_.avi)
    -> ReplaySubject ID_EyeRIGHT(BufferSize=nil)
    #1 -> ReplaySubject AnimalID(BufferSize=nil)
    #1 -> Format(Format={0}\\{0}_IMU_.csv)
    -> ReplaySubject ID_IMU(BufferSize=nil)
    #1 -> Format(Format={0}\\{0}_Saccades_L_.csv)
    -> ReplaySubject Saccades_L(BufferSize=nil)

    DoubleProperty(Value=100)
    -> ReplaySubject VDThreshold(BufferSize=nil)

    DoubleProperty(Value=15)
    -> ReplaySubject VDDIfferenceThreshold(BufferSize=nil)

    Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock D P T Control", SuppressRepetitions=false)
    -> ReplaySubject StartTrial(BufferSize=nil)

    Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Control", SuppressRepetitions=false)
    -> ReplaySubject StartSession(BufferSize=nil)
    -> Disable PublishSubject StartSession

    IntProperty(Value=10)
    -> ReplaySubject EyeMovementMagThresh(BufferSize=nil)

    DoubleProperty(Value=120)
    -> ReplaySubject AcceptanceAngle(BufferSize=nil)

    TimeSpanProperty(Value=PT1S)
    -> ReplaySubject StimStartWhiteCircleDur(BufferSize=nil)

    TimeSpanProperty(Value=PT1S)
    -> ReplaySubject TrialStartGreenCircleDur(BufferSize=nil)

    SubscribeSubject TrialStartGreenCircleDur => #38
    SubscribeSubject StimStartWhiteCircleDur => #39
    TimeSpanProperty(Value=PT0S) => #40
    #38, #39, #40 -> CombineLatest
    -> Add
    -> ReplaySubject EyeMovementEnd(BufferSize=nil)

    SubscribeSubject TrialStartGreenCircleDur => #44
    Disable SubscribeSubject StimStartWhiteCircleDur => #45
    #44, #45 -> Disable CombineLatest
    -> Add(Operand=TimeSpanProperty(Value=PT0S))
    -> ReplaySubject EyeMovementBegin(BufferSize=nil)

    Bonsai.Numerics.CreateRandom(Seed=1)
    -> BehaviorSubject rand2

    Bonsai.Numerics.CreateRandom(Seed=2)
    -> BehaviorSubject rand

Bonsai.IO.Ports.CreateSerialPort
  Name="Sensor "
  PortName=COM8
  BaudRate=57600
  NewLine=\r\n
  Parity=None
  ParityReplace=63
  DataBits=8
  StopBits=One
  Handshake=None
  DiscardNull=false
  DtrEnable=false
  RtsEnable=false
  ReadBufferSize=4096
  WriteBufferSize=2048
  ReceivedBytesThreshold=1

Bonsai.IO.Ports.CreateSerialPort
  Name=IMU
  PortName=COM4
  BaudRate=115200
  NewLine=\r\n
  Parity=None
  ParityReplace=63
  DataBits=8
  StopBits=One
  Handshake=None
  DiscardNull=false
  DtrEnable=false
  RtsEnable=false
  ReadBufferSize=4096
  WriteBufferSize=2048
  ReceivedBytesThreshold=1

Bonsai.Arduino.CreateArduino(Name=Arduino_SyringePump, PortName=COM3, BaudRate=57600, SamplingInterval=19)

GroupWorkflow "TTL + SyringePump (Ctrl+T for TTL) (Ctrl+J for juice)"
    Bonsai.Windows.Input.KeyDown(Filter="RButton Back LineFeed B H J Control", SuppressRepetitions=false) => #0
    -> BooleanProperty(Value=false)
    -> Delay(DueTime=PT0.1S) => #2
    #0 -> BooleanProperty(Value=true) => #3
    #2, #3 -> Merge => #4
    Bonsai.IO.Ports.SerialReadLine(PortName="Sensor ")
    -> Bonsai.Scripting.IronPython.PythonTransform CheckLick
      Script:
        @returns(bool)
        def process(value):
          output=value[0:2]
          if output=='Lx':
            output_bool=True
          else:
            output_bool=False
          return output_bool
    -> IncludeWorkflow Lick(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> Condition Licked => #8
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> Delay(DueTime=PT0.1S) => #10
    #8 -> BooleanProperty(Value=true) => #11
    #10, #11 -> Merge => #12
    #4, #12 -> Merge
    -> Bonsai.Arduino.DigitalOutput(PortName=Arduino_SyringePump, Pin=8)
    -> IncludeWorkflow Juice(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector=nil)
    -> WorkflowOutput

    GroupWorkflow "TTL Generation"
        SubscribeSubject StartTrial
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              if (value & 1 == 1):
                  return False
              else:
                  return True
        -> Bonsai.Arduino.DigitalOutput(PortName=Arduino_SyringePump, Pin=2)

    Disable SubscribeSubject LeftPupil => #18
    SubscribeSubject "Right Pupil" => #19
    #18, #19 -> MemberSelector(Selector=X) => #20
    #18, #19 -> MemberSelector(Selector=Y) => #21
    #20, #21 -> Zip => #22
    -> Skip(Count=1) => #23
    #23, #22 -> Zip => #24
    SubscribeSubject "AP Axis" => #25
    SubscribeSubject BlinkState => #26
    #24, #25, #26 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform "Saccade Logging"
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        from System import Tuple
        @returns(Tuple[bool,float,float])
        def process(value):
          pre_x,pre_y = value.Item1.Item1
          x,y         = value.Item1.Item2
          dx = x - pre_x
          dy = y - pre_y

          ax = value.Item2[0].X
          ay = value.Item2[0].Y
          px = value.Item2[1].X
          py = value.Item2[1].Y

          xx = px-ax
          yy = py-ay
          magnitude = math.sqrt(dx**2+dy**2)
          mag_axis =  math.sqrt(xx**2+yy**2)
          try:
            direction = math.acos((dx*xx+dy*yy)/(magnitude*mag_axis))
            direction = math.degrees(direction)
          except:
        #ValueError or ZeroDivisionError:
            direction = float("nan")
          if (magnitude>=5):
            return Tuple.Create(True,magnitude,direction)
          else:
            return Tuple.Create(False,magnitude,direction)
    -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #29
      Expression:
        new(
        it.Item1 as Saccade,
        it.Item2 as Magnitude,
        it.Item3 as Direction

        )
    SubscribeSubject Saccades_L
    -> PropertyMapping(FileName) => #31
    #29, #31 -> Bonsai.IO.CsvWriter(FileName=Tsh001\\Tsh001_Saccades_L_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    Disable SubscribeSubject EM => #33
    Disable SubscribeSubject EyeMovementMagThresh => #34
    #33, #34 -> Disable CombineLatest
    -> Disable Bonsai.Scripting.IronPython.PythonTransform "EM-Threshold  Comparison" => #36
      Script:
        @returns(bool)
        def process(value):
          magnitude = value.Item1
          threshold = value.Item2
          if (magnitude>=threshold):
              return True
          else:
              return False
    Disable SubscribeSubject BlinkState => #37
    #36, #37 -> Disable CombineLatest
    -> Disable Bonsai.Scripting.IronPython.PythonTransform SaccadeDetection
      Script:
        @returns(bool)
        def process(value):
          return (value.Item1 & ~(value.Item2))
    -> Disable IncludeWorkflow saccade(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> Disable Bonsai.Arduino.DigitalOutput(PortName=Arduino_SyringePump, Pin=8)
    -> Disable IncludeWorkflow Juice(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector=nil)

    Disable SubscribeSubject LeftPupil => #43
    SubscribeSubject "Right Pupil" => #44
    #43, #44 -> MemberSelector(Selector=X) => #45
    #43, #44 -> MemberSelector(Selector=Y) => #46
    #45, #46 -> Zip => #47
    -> Skip(Count=1) => #48
    #48, #47 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform "Eye Movement"
      Script:
        import math
        @returns(float)
        def process(value):
          pre_x,pre_y = value.Item1
          x,y         = value.Item2
          dx = x - pre_x
          dy = y - pre_y
          magnitude = math.sqrt(dx**2+dy**2)
          return magnitude
    -> BehaviorSubject EM

GroupWorkflow "BonVision Setup"
    Bonsai.Shaders.CreateWindow
      Width=1920
      Height=1080
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame => #3
    SubscribeSubject TTL => #4
    #3, #4 -> Disable SubscribeWhen
    -> Sample => #6
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_FramesLogger_.csv)
    -> PropertyMapping(FileName) => #9
    #6, #9 -> IncludeWorkflow BonsaiFrames(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=true, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_FramesLogger_.csv)
    -> IncludeWorkflow BonsaiFrames(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector=nil)
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #12
    SubscribeSubject StartSession => #13
    #12, #13 -> SkipUntil
    -> PublishSubject Draw
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_CameraLogger_.csv, Selector="")
    -> PropertyMapping(FileName) => #18
    #6, #18 -> IncludeWorkflow EyeCamera(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_CameraLogger_.csv)
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_JuiceLogger_.csv)
    -> PropertyMapping(FileName) => #22
    #6, #22 -> IncludeWorkflow Juice(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_JuiceLogger_.csv)
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_Lick_.csv)
    -> PropertyMapping(FileName) => #26
    #6, #26 -> IncludeWorkflow Lick(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_Lick_.csv)
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_PupilL_.csv)
    -> PropertyMapping(FileName) => #30
    #6, #30 -> IncludeWorkflow saccade(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_PupilL_.csv)
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_PupilR_.csv)
    -> PropertyMapping(FileName) => #34
    #6, #34 -> IncludeWorkflow saccade_R(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_PupilR_.csv)
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_vstim_cue_.csv)
    -> PropertyMapping(FileName) => #38
    #6, #38 -> IncludeWorkflow cue(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_vstim_cue_.csv)
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_vstim_go_.csv)
    -> PropertyMapping(FileName) => #42
    #6, #42 -> IncludeWorkflow go(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_vstim_go_.csv)
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_ellipse_center_XY_L.csv)
    -> PropertyMapping(FileName) => #46
    #6, #46 -> IncludeWorkflow Center_L(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_ellipse_center_XY_L.csv)
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_origin_of_eyecoordinate_L.csv)
    -> PropertyMapping(FileName) => #50
    #6, #50 -> IncludeWorkflow Origin_L(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_origin_of_eyecoordinate_L.csv)
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_ellipse_center_XY_R.csv)
    -> PropertyMapping(FileName) => #54
    #6, #54 -> IncludeWorkflow Center_R(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_ellipse_center_XY_R.csv)
    SubscribeSubject AnimalID
    -> Format(Format={0}\\{0}_origin_of_eyecoordinate_R.csv)
    -> PropertyMapping(FileName) => #58
    #6, #58 -> IncludeWorkflow Origin_R(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Tsh001\\Tsh001_origin_of_eyecoordinate_R.csv)

Disable GroupWorkflow LED_Sync
    SubscribeSubject CameraLeft
    -> Bonsai.Vision.Crop(RegionOfInterest(X=1625, Y=34, Width=275, Height=332))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=100, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0) => #5
    SubscribeSubject CameraRight
    -> Bonsai.Vision.Crop(RegionOfInterest(X=972, Y=34, Width=275, Height=332))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=100, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0) => #11
    #5, #11 -> CombineLatest
    -> IncludeWorkflow LED(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=300, Min=nil, Max=nil)
    -> WorkflowOutput

Disable GroupWorkflow IMU_old
    Disable Bonsai.IO.Ports.SerialRead(PortName=IMU, Count=24)
    -> Disable Bonsai.Scripting.IronPython.PythonTransform ParseSerialData => #1
      Script:
        import struct
        from System import Tuple
        from System import UInt32
        class arduino_packet:
          def __init__(self,a_x=0,a_y=0,a_z=0,g_x=0,g_y=0,g_z=0,m_x=0,m_y=0,m_z=0,led=0,time=0,cs=0):
             self.a_x=a_x
             self.a_y=a_y
             self.a_z=a_z
             self.g_x=g_x
             self.g_y=g_y
             self.g_z=g_z
             self.m_x=m_x
             self.m_y=m_y
             self.m_z=m_z
             self.led = led
             self.time = UInt32(time)
             self.cs = cs
        #packet=collections.namedtuple('packet','a_x time')
        #@returns( type(arduino_packet()))
        @returns(Tuple[int,int,int,int,int,int,UInt32,Tuple[Tuple[int,int,int]]])
        def process(value):
          arduino_in = struct.unpack("<hhhhhhhhhbIB", bytearray(value))
          ap = arduino_packet(*arduino_in)
          #return (a[0],a[1],a[2],a[3],a[4],a[5],a[6],a[7],a[8],a[9],a[10],a[11],len(a))
          #return arduino_packet(*arduino_in)
          #m_tuple = Tuple.Create(ap.m_x,ap.m_y,ap.m_z)
          return Tuple.Create(ap.a_x,ap.a_y,ap.a_z,ap.g_x,ap.g_y,ap.g_z,ap.time,Tuple.Create(ap.m_x,ap.m_y,ap.m_z))
    -> Disable MemberSelector(Selector=Item1) => #2
    #1 -> Disable MemberSelector(Selector=Item2) => #3
    #1 -> Disable MemberSelector(Selector=Item3) => #4
    #1 -> Disable MemberSelector(Selector=Item4) => #5
    #1 -> Disable MemberSelector(Selector=Item5) => #6
    #1 -> Disable MemberSelector(Selector=Item6) => #7
    #1 -> Disable MemberSelector(Selector=Item7) => #8
    #1 -> Disable MemberSelector(Selector=Rest)
    -> Disable MemberSelector(Selector=Item1) => #10
    -> Disable MemberSelector(Selector=Item1) => #11
    #10 -> Disable MemberSelector(Selector=Item2) => #12
    #10 -> Disable MemberSelector(Selector=Item3) => #13
    #2, #3, #4, #5, #6, #7, #8, #11, #12, #13 -> Disable Zip
    -> Disable Bonsai.IO.CsvWriter(FileName=imu_data.csv, Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

GroupWorkflow IMU
    Bonsai.Scripting.Python.CreateRuntime(PythonHome=C:\Users\Sarvestani\Documents\.venv, ScriptPath=C:\Users\Sarvestani\Documents\Bonsai_scripts\bonsaimain.py)

    Bonsai.IO.Ports.SerialRead(PortName=IMU, Count=24)
    -> Bonsai.Scripting.Python.ObserveOnGIL
    -> Bonsai.Scripting.Python.Set(VariableName=from_arduino)
    -> Bonsai.Scripting.Python.Eval => #4
      Expression: parse_serialdata(from_arduino)
    -> Bonsai.Scripting.Python.Get(VariableName=t)
    -> Bonsai.Scripting.Expressions.ExpressionTransform Time => #6
      Expression: Convert.ToDouble(it)
    #4 -> Bonsai.Scripting.Python.Get(VariableName=a_x)
    -> Bonsai.Scripting.Expressions.ExpressionTransform acc_x => #8
      Expression: Convert.ToDouble(it)
    #4 -> Bonsai.Scripting.Python.Get(VariableName=a_y)
    -> Bonsai.Scripting.Expressions.ExpressionTransform acc_y => #10
      Expression: Convert.ToDouble(it)
    #4 -> Bonsai.Scripting.Python.Get(VariableName=a_z)
    -> Bonsai.Scripting.Expressions.ExpressionTransform acc_z => #12
      Expression: Convert.ToDouble(it)
    #4 -> Bonsai.Scripting.Python.Get(VariableName=g_x)
    -> Bonsai.Scripting.Expressions.ExpressionTransform gyro_x => #14
      Expression: Convert.ToDouble(it)
    #4 -> Bonsai.Scripting.Python.Get(VariableName=g_y)
    -> Bonsai.Scripting.Expressions.ExpressionTransform gyro_y => #16
      Expression: Convert.ToDouble(it)
    #4 -> Bonsai.Scripting.Python.Get(VariableName=g_z)
    -> Bonsai.Scripting.Expressions.ExpressionTransform gyro_z => #18
      Expression: Convert.ToDouble(it)
    #4 -> Bonsai.Scripting.Python.Get(VariableName=m_x)
    -> Bonsai.Scripting.Expressions.ExpressionTransform mag_x => #20
      Expression: Convert.ToDouble(it)
    #4 -> Bonsai.Scripting.Python.Get(VariableName=m_y)
    -> Bonsai.Scripting.Expressions.ExpressionTransform mag_y => #22
      Expression: Convert.ToDouble(it)
    #4 -> Bonsai.Scripting.Python.Get(VariableName=m_z)
    -> Bonsai.Scripting.Expressions.ExpressionTransform mag_z => #24
      Expression: Convert.ToDouble(it)
    #6, #8, #10, #12, #14, #16, #18, #20, #22, #24 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #26
      Expression:
        new(
        it[0] as Time,
        it[1] as acc_x,
        it[2] as acc_y,
        it[3] as acc_z,
        it[4] as gyro_x,
        it[5] as gyro_y,
        it[6] as gyro_z,
        it[7] as mag_x,
        it[8] as mag_y,
        it[9] as mag_z)
    SubscribeSubject ID_IMU
    -> PropertyMapping(FileName) => #28
    #26, #28 -> Bonsai.IO.CsvWriter(FileName=Tsh001\\Tsh001_IMU_.csv, ListSeparator="", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

GroupWorkflow MouseAsEye
    Bonsai.Shaders.Input.Mouse(Index=nil) => #0
    -> MemberSelector(Selector=X)
    -> BufferCount(Count=5, Skip=1)
    -> Add
    -> Divide(Operand=FloatProperty(Value=5)) => #4
    #0 -> MemberSelector(Selector=Y)
    -> BufferCount(Count=5, Skip=1)
    -> Add
    -> Divide(Operand=FloatProperty(Value=5)) => #8
    #4, #8 -> Zip
    -> PublishSubject MousePupil
    -> WorkflowOutput

IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=6, RangeMin=-1.5, RangeMax=1.5) => #10
SubscribeSubject rand => #11
#10, #11 -> Bonsai.Numerics.Permutation
-> GroupWorkflow "Horizontal (X) " => #13
    WorkflowInput Source1
    -> WorkflowOutput
IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=0, RangeMax=0) => #14
SubscribeSubject rand2 => #15
#14, #15 -> Bonsai.Numerics.Permutation
-> GroupWorkflow "Vertical (Y) " => #17
    WorkflowInput Source1
    -> WorkflowOutput
#13, #17 -> Zip
-> CreateObservable "Stim Juice"
    SubscribeSubject Draw => #0
    Bonsai.Shaders.RenderFrame
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> Mod(Operand=IntProperty(Value=4))
    -> IncludeWorkflow cue(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> PropertyMapping(ColorA) => #6
    #0, #6 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=0.2, LocationX=0, LocationY=0, Layer=0, ColorR=0, ColorG=0.8, ColorB=0.8, ColorA=2) => #7
    SubscribeSubject TrialStartGreenCircleDur
    -> PropertyMapping(DueTime)
    -> Bonsai.Shaders.Timer(DueTime=PT1S) => #10
    #7, #10 -> TakeUntil => #11
    SubscribeSubject Draw => #12
    SubscribeSubject CurrentPair => #13
    -> MemberSelector(Selector=Item1)
    -> Divide(Operand=FloatProperty(Value=1))
    -> Disable GroupWorkflow MoveCircle
        WorkflowInput Source1 => #0
        -> Subtract(Operand=DoubleProperty(Value=-1))
        -> PropertyMapping(RangeBegin) => #2
        #0 -> Add(Operand=DoubleProperty(Value=0))
        -> PropertyMapping(RangeEnd) => #4
        #2, #4 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=0.05, RangeBegin=0, RangeEnd=-1)
        -> WorkflowOutput
    -> IncludeWorkflow go(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> PropertyMapping(LocationX) => #18
    #13 -> MemberSelector(Selector=Item2)
    -> Divide(Operand=FloatProperty(Value=1))
    -> PropertyMapping(LocationY) => #21
    Bonsai.Shaders.RenderFrame
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> Mod(Operand=IntProperty(Value=4))
    -> PropertyMapping(ColorR, ColorG, ColorB) => #26
    #12, #18, #21, #26 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=0.2, LocationX=-0.3, LocationY=0, Layer=0, ColorR=3, ColorG=3, ColorB=3, ColorA=0.5) => #27
    SubscribeSubject StimStartWhiteCircleDur
    -> PropertyMapping(DueTime)
    -> Bonsai.Shaders.Timer(DueTime=PT1S) => #30
    #27, #30 -> TakeUntil => #31
    #11, #31 -> Concat
    -> Delay(DueTime=PT1S) => #33
    SubscribeSubject EyeMovementEnd
    -> PropertyMapping(DueTime) => #35
    SubscribeSubject EyeMovementMagThresh
    -> PropertyMapping(Value) => #37
    #35, #37 -> GroupWorkflow "Pupil Direction for trial" => #38
        Disable GroupWorkflow "GreenCircleDur+WhiteCircleDu+time to move eyer"
            WorkflowInput Source1
            -> WorkflowOutput

        Disable SubscribeSubject LeftPupil => #1
        SubscribeSubject "Right Pupil" => #2
        #1, #2 -> MemberSelector(Selector=X) => #3
        #1, #2 -> MemberSelector(Selector=Y) => #4
        #3, #4 -> Zip => #5
        SubscribeSubject StartSession => #6
        #5, #6 -> SkipUntil => #7
        SubscribeSubject EyeMovementBegin
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S) => #10
        #7, #10 -> SkipUntil => #11
        -> Skip(Count=1) => #12
        #11, #12 -> Zip => #13
        ExternalizedMapping(Value) => #14
        #13, #14 -> GroupWorkflow "Eye direction for trial" => #15
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2)
            -> Disable GroupWorkflow StartPos => #2
                WorkflowInput Source1
                -> WorkflowOutput
            #0 -> MemberSelector(Selector=Item1)
            -> Disable GroupWorkflow CurrentPos => #4
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(Value) => #5
            #0, #5 -> FloatProperty(Value=10)
            -> Disable GroupWorkflow MagnitudeThresh => #7
                WorkflowInput Source1
                -> WorkflowOutput
            #2, #4, #7 -> Disable Zip
            -> CombineLatest
            -> Bonsai.Scripting.IronPython.PythonTransform "Eye direction for trial"
              Script:
                import math
                from System import Tuple

                @returns(float)
                # x0 is the position in the last 0.1 seconds of the red dot
                # x1 is the current position
                # We'll calculate the angle, and output it only when there was signifcant movement (high magnitude) between x0 and x1
                def process(value):
                  x0, y0 = value.Item1
                  x1, y1 = value.Item2
                  dx = x1 - x0
                  dy = y1 - y0
                  Thresh = value.Item3
                  magnitude = math.sqrt(dx**2+dy**2)

                # Check if the magnitude is smaller than the threshold
                  if magnitude < Thresh or magnitude>100:
                    return 0

                  angle_rad = math.atan2(dy, dx)
                  angle_deg = 360-(math.degrees(angle_rad)+180)

                  #return float(angle_deg)
                  return magnitude-Thresh
            -> WorkflowOutput
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT2S) => #17
        #15, #17 -> TakeUntil
        -> WorkflowOutput
    Disable SubscribeSubject CurrentPair
    -> Disable Bonsai.Scripting.IronPython.PythonTransform "Stim direction for trial" => #40
      Script:
        import math
        from System import Tuple

        @returns(float)
        def process(value):
          x, y = value
          angle_rad = math.atan2(y, x)
          angle_deg = math.degrees(angle_rad)+180
          return float(angle_deg)
    Disable SubscribeSubject AcceptanceAngle => #41
    #38, #40, #41 -> Disable CombineLatest
    -> GroupWorkflow "Compare Eye and Stim Dir"
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform "Compare Stim, Pupil Direction"
          Script:
            import math
            @returns(bool)
            def process(value):
              #stim_dir = value.Item2
              #pupil_dir = value.Item1
              pupil_dir = value
              #acceptance_angle = value.Item3

              outcome = False

              # Check for NaN inputs
              #if math.isnan(stim_dir) or math.isnan(pupil_dir):
              if math.isnan(pupil_dir):
                outcome = False
              elif pupil_dir == 0:
                outcome = False
              else:
                outcome = True

              #diff1 = abs(stim_dir-pupil_dir)
              #diff2 = abs(360+pupil_dir-stim_dir)

              #dir_diff =min(diff1,diff2)

              #if dir_diff <= acceptance_angle:
              #  outcome = True

            ##Now always give juice TODO
              return outcome
        -> WorkflowOutput
    -> Condition "Juice Delivery"
        WorkflowInput Source1
        -> SkipWhile
            Disable WorkflowInput Source1 => #0
            SubscribeSubject BlinkState_R => #1
            #0, #1 -> WorkflowOutput
        -> Bonsai.Arduino.DigitalOutput(PortName=Arduino_SyringePump, Pin=8)
        -> IncludeWorkflow Juice(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector=nil)
        -> WorkflowOutput
    -> Disable Delay(DueTime=PT4S)
    -> Disable GroupWorkflow "Dont get rid of delay(Connectyed to takeuntill before)" => #46
        WorkflowInput Source1
        -> WorkflowOutput
    #33, #46 -> TakeUntil
    -> Delay(DueTime=PT2S)
    -> Disable GroupWorkflow InterTrialDuration
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
    SubscribeSubject AudioFile => #51
    #10, #51 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #53
    SubscribeSubject StartSession => #54
    #53, #54 -> SubscribeWhen
    -> MulticastSubject Playback

    BehaviorSubject<OpenCV.Net.Mat> Playback
    -> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Headphones (Realtek(R) Audio)", SampleRate=10000, State=Playing)

    WorkflowInput Source1
    -> ReplaySubject CurrentPair(BufferSize=nil)

    SubscribeSubject CurrentPair
    -> Bonsai.Scripting.IronPython.PythonTransform LeftorRightAudio
      Script:
        import math
        from System import Tuple

        @returns(str)
        def process(value):
          x, y = value
          angle_rad = math.atan2(y, x)
          angle_deg = math.degrees(angle_rad)+180

          if angle_deg==360:
            filename= str('Stereo_Left.wav')
          elif angle_deg ==180:
            filename=str('Stereo_Right.wav')
          else:
            filename = str('Stereo_Left.wav')

          return filename
    -> PropertyMapping(FileName)
    -> Bonsai.Audio.AudioReader(FileName=Stereo_Left.wav, BufferLength=10, SampleRate=10000)
    -> PublishSubject AudioFile

    Bonsai.Audio.AudioReader(FileName=greenlight.wav, BufferLength=10, SampleRate=10000) => #66
    SubscribeSubject Draw => #67
    #66, #67 -> SubscribeWhen => #68
    SubscribeSubject TrialStartGreenCircleDur
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1S, Period=PT0S) => #71
    #68, #71 -> TakeUntil
    -> Bonsai.Audio.AudioPlayback(SampleRate=44100, State=Playing)
-> Concat
-> Take(Count=1)
-> RepeatCount(Count=10000)
-> ElementIndex
-> MemberSelector(Selector=Index) => #24
Bonsai.Shaders.Timer(DueTime=PT2S) => #25
#24, #25 -> SubscribeWhen
-> WorkflowOutput

Bonsai.Spinnaker.SpinnakerCapture(Index=1, ColorProcessing=Default)
-> Disable Bonsai.Vision.FileCapture => #29
  FileName=TSh01_Paris_local\Tsh01_2025-04-22T16_06_51\Tsh01_H_L_2025-04-22T16_06_49.avi
  PlaybackRate=63
  StartPosition=0
  PositionUnits=Frames
  Loop=false
  Playing=true
Bonsai.Spinnaker.SpinnakerCapture(Index=0, ColorProcessing=Default)
-> Disable Bonsai.Vision.FileCapture => #31
  FileName=TSh01_Paris_local\Tsh01_2025-04-22T16_06_51\Tsh01_H_R_2025-04-22T16_06_49.avi
  PlaybackRate=63
  StartPosition=0
  PositionUnits=Frames
  Loop=false
  Playing=true
#29, #31 -> Disable Zip
-> WithLatestFrom
-> BehaviorSubject TTL
-> IncludeWorkflow EyeCamera(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil) => #35
-> Disable GroupWorkflow SaveCameraStats
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1.ChunkData.FrameID)
    -> Bonsai.Dsp.Difference(Order=1)
    -> Accumulate
    -> Timestamp
    -> MemberSelector(Selector=Value) => #5
    #0 -> MemberSelector(Selector=Item1.ChunkData.Timestamp)
    -> GroupWorkflow FramerateMonitor => #7
        WorkflowInput<System.Int64> Source1
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 1/(it*1e-9)
        -> WorkflowOutput
    #5, #7 -> Zip
    -> Timestamp => #9
    -> MemberSelector(Selector=Value) => #10
    #9 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #11
    #9 -> MemberSelector(Selector=Timestamp.DateTime.Day) => #12
    #9 -> MemberSelector(Selector=Timestamp.DateTime.Year) => #13
    #9 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #14
    #10, #11, #12, #13, #14 -> Zip => #15
    #0 -> MemberSelector(Selector=Item2.ChunkData.FrameID)
    -> Bonsai.Dsp.Difference(Order=1)
    -> Accumulate
    -> Timestamp
    -> MemberSelector(Selector=Value) => #20
    #0 -> MemberSelector(Selector=Item2.ChunkData.Timestamp)
    -> GroupWorkflow FramerateMonitor => #22
        WorkflowInput<System.Int64> Source1
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 1/(it*1e-9)
        -> WorkflowOutput
    #20, #22 -> Zip
    -> Timestamp => #24
    -> MemberSelector(Selector=Value) => #25
    #24 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #26
    #24 -> MemberSelector(Selector=Timestamp.DateTime.Day) => #27
    #24 -> MemberSelector(Selector=Timestamp.DateTime.Year) => #28
    #24 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #29
    #25, #26, #27, #28, #29 -> Zip => #30
    #15, #30 -> Zip => #31
    SubscribeSubject AnimalID
    -> Format(Format={0}_CameraStats_.csv)
    -> PropertyMapping(FileName) => #34
    #31, #34 -> Bonsai.IO.CsvWriter(FileName=Rat012_CameraStats_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    -> WorkflowOutput
#35 -> MemberSelector(Selector=Item1)
-> MemberSelector(Selector=Image)
-> Bonsai.Vision.Flip(Mode=Horizontal)
-> PublishSubject CameraLeft
#35 -> MemberSelector(Selector=Item2)
-> MemberSelector(Selector=Image)
-> Disable Bonsai.Vision.Flip(Mode=Horizontal)
-> PublishSubject CameraRight

SubscribeSubject ID_HeadLEFT
-> PropertyMapping(FileName) => #46
SubscribeSubject CameraLeft => #47
#46, #47 -> Bonsai.FFmpeg.VideoWriter
  FileName=Tsh001\\Tsh001_H_L_.avi
  Suffix=Timestamp
  Overwrite=false
  FrameRate=60
  OutputArguments="-c:v h264_nvenc -vsync 0 -2pass 0 -bf:v 0 -qp 24 -preset llhp -b:v 6M -rc:v cbr"
SubscribeSubject ID_EyeLEFT
-> PropertyMapping(FileName) => #50
#47 -> Bonsai.Vision.Crop(RegionOfInterest(X=1260, Y=460, Width=597, Height=531)) => #51
#50, #51 -> Bonsai.FFmpeg.VideoWriter
  FileName=Tsh001\\Tsh001_E_L_.avi
  Suffix=Timestamp
  Overwrite=false
  FrameRate=60
  OutputArguments="-c:v h264_nvenc -vsync 0 -2pass 0 -bf:v 0 -qp 24 -preset llhp -b:v 6M -rc:v cbr"
-> ObserveOn(Scheduler=TaskPoolScheduler)
-> Slice(Start=0, Step=10, Stop=nil)
-> GroupWorkflow LiveTrackEllipse => #55
    WorkflowInput Source1
    -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr)
    -> Bonsai.DeepLabCut.PredictPose => #2
      ModelFileName=X:\Experimental_Data\EyeHeadCoupling_RatTS_server\EyeTrackingDLC\DLC_Eye_resnet_50_iteration-0_shuffle-1\snapshot-1800000.pb
      PoseConfigFileName=X:\Experimental_Data\EyeHeadCoupling_RatTS_server\EyeTrackingDLC\DLC_Eye_resnet_50_iteration-0_shuffle-1\pose_cfg.yaml
      MinConfidence=0.5
      ScaleFactor=0.8
      ColorConversion=Bgr2Rgb
    -> Bonsai.DeepLabCut.GetBodyPart(Name=anterior_pupil)
    -> MemberSelector(Selector=Position) => #4
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=dorsal_pupil)
    -> MemberSelector(Selector=Position) => #6
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=posterior_pupil)
    -> MemberSelector(Selector=Position) => #8
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=ventral_pupil)
    -> MemberSelector(Selector=Position) => #10
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=anterior_dorsal_pupil)
    -> MemberSelector(Selector=Position) => #12
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=anterior_ventral_pupil)
    -> MemberSelector(Selector=Position) => #14
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=posterior_dorsal_pupil)
    -> MemberSelector(Selector=Position) => #16
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=posterior_ventral_pupil)
    -> MemberSelector(Selector=Position) => #18
    #4, #6, #8, #10, #12, #14, #16, #18 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform "Ellipse Fitting" => #20
      Script:
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        from System import Array
        @returns(RotatedRect) # To know more about this return type, go to https://horizongir.github.io/opencv.net/api/OpenCV.Net.RotatedRect.html
        def process(value):
           points = Array.CreateInstance(int,len(value),2); #Create a 2D array to hold the co-ordinates of 8 points
           LastValidIndex = None # In case of one or more coordinates are NaN, use the last valid index
           for i in range(0,len(value)):
              try:
                points[i,0]=int(value[i].X)
                points[i,1]=int(value[i].Y)
              except ValueError:
                if LastValidIndex is None:
                    points[i,0]=0
                    points[i,1]=0
                else:
                    points[i,0]=int(value[LastValidIndex].X)
                    points[i,1]=int(value[LastValidIndex].Y)
                continue
              LastValidIndex = i
           points_cv = Mat.FromArray(points) # Convert points array to CVHandle object type Mat
           rct= CV.FitEllipse2(points_cv) # Fit ellipse. This returns rotated rect object.
           #x = rct.Center
           return rct
    -> MemberSelector(Selector=Size)
    -> Bonsai.Scripting.IronPython.PythonTransform Area => #22
      Script:
        import math
        @returns(float)
        def process(value):
          area = math.pi * value.Width*value.Height

          return area
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=anterior_eye)
    -> MemberSelector(Selector=Position) => #24
    -> MemberSelector(Selector=X)
    -> Bonsai.Dsp.FirFilter => #26
      Anchor=-1
      Kernel: 0.0003,0.0005,0.0009,0.0016,0.0027,0.0045,0.0071,0.0109,0.0159,0.0223,0.03,0.0389,0.0484,0.0579,0.0666,0.0736,0.0781,0.0797,0.0781,0.0736,0.0666,0.0579,0.0484,0.0389,0.03,0.0223,0.0159,0.0109,0.0071,0.0045,0.0027,0.0016,0.0009,0.0005,0.0003
    #24 -> MemberSelector(Selector=Y)
    -> Bonsai.Dsp.FirFilter => #28
      Anchor=-1
      Kernel: 0.0003,0.0005,0.0009,0.0016,0.0027,0.0045,0.0071,0.0109,0.0159,0.0223,0.03,0.0389,0.0484,0.0579,0.0666,0.0736,0.0781,0.0797,0.0781,0.0736,0.0666,0.0579,0.0484,0.0389,0.03,0.0223,0.0159,0.0109,0.0071,0.0045,0.0027,0.0016,0.0009,0.0005,0.0003
    #26, #28 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform => #30
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(Point2f)
        def process(value):
          return Point2f(value[0],value[1])
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=posterior_eye)
    -> MemberSelector(Selector=Position) => #32
    -> MemberSelector(Selector=X)
    -> Bonsai.Dsp.FirFilter => #34
      Anchor=-1
      Kernel: 0.0003,0.0005,0.0009,0.0016,0.0027,0.0045,0.0071,0.0109,0.0159,0.0223,0.03,0.0389,0.0484,0.0579,0.0666,0.0736,0.0781,0.0797,0.0781,0.0736,0.0666,0.0579,0.0484,0.0389,0.03,0.0223,0.0159,0.0109,0.0071,0.0045,0.0027,0.0016,0.0009,0.0005,0.0003
    #32 -> MemberSelector(Selector=Y)
    -> Bonsai.Dsp.FirFilter => #36
      Anchor=-1
      Kernel: 0.0003,0.0005,0.0009,0.0016,0.0027,0.0045,0.0071,0.0109,0.0159,0.0223,0.03,0.0389,0.0484,0.0579,0.0666,0.0736,0.0781,0.0797,0.0781,0.0736,0.0666,0.0579,0.0484,0.0389,0.03,0.0223,0.0159,0.0109,0.0071,0.0045,0.0027,0.0016,0.0009,0.0005,0.0003
    #34, #36 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform => #38
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(Point2f)
        def process(value):
          return Point2f(value[0],value[1])
    #30, #38 -> Zip
    -> BehaviorSubject "AP Axis"
    -> IncludeWorkflow Origin_L(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> Bonsai.Scripting.IronPython.PythonTransform Origin => #42
      Script:
        #def intersection(x1,y1,x2,y2,x3,y3,x4,y4):
        #  x = ((x1*y2-y1*x2)*(x3-x4) - (x1-x2)*(x3*y4-y3*x4))/((x1-x2)*(y3-y4) - (y1-y2)*(x3-x4))
        #  y = ((x1*y2-y1*x2)*(y3-y4)-(y1-y2)*(x3*y4-y3*x4))/((x1-x2)*(y3-y4) - (y1-y2)*(x3-x4))
        #  return x,y
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(Point2f)
        def process(value):
          x1=value[0].X
          y1=value[0].Y
          x2=value[1].X
          y2=value[1].Y
          #x3=value[2].X
          #y3=value[2].Y
          #x4=value[3].X
          #y4=value[3].Y
         # try:
         #   x = ((x1*y2-y1*x2)*(x3-x4)-(x1-x2)*(x3*y4-y3*x4))/((x1-x2)*(y3-y4)-(y1-y2)*(x3-x4))
         #   y = ((x1*y2-y1*x2)*(y3-y4)-(y1-y2)*(x3*y4-y3*x4))/((x1-x2)*(y3-y4)-(y1-y2)*(x3-x4))
         #   return Point2f(x,y)
         # except ValueError or ZeroDivisionError:
         #   return Point2f(0,0)
         # return Point2f(0,0)

          try:
            x = (x1+x2)/2;
            y = (y1+y2)/2;
            return Point2f(x,y)
          except ValueError or ZeroDivisionError:
            return Point2f(float("nan"),float("nan"))
          return Point2f(float("nan"),float("nan"))
    -> Condition NaNFilter => #43
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import math
            @returns(bool)
            def process(value):
              if math.isnan(value.X) or math.isnan(value.Y) :
                  return False
              else:
                  return True
        -> WorkflowOutput
    #42, #43 -> CombineLatest
    -> Bonsai.Scripting.IronPython.PythonTransform => #45
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(Point2f)
        def process(value):
          if math.isnan(value.Item1.X) or math.isnan(value.Item1.Y):
              return value.Item2
          else:
              return value.Item1
    #20 -> MemberSelector(Selector=Center)
    -> IncludeWorkflow Center_L(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil) => #47
    #45, #47 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform "Eye-Centered Center" => #49
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(Point2f)
        def process(value):
          ox = value[0].X
          oy = value[0].Y
          cx = value[1].X
          cy = value[1].Y
          x = cx-ox
          y = cy-oy
          if(math.isnan(x) or math.isnan(y)):
              return Point2f(float("nan"),float("nan"))
          else:
              return Point2f(x,y)
    #22, #49 -> Zip
    -> WorkflowOutput
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=ventral_eye)
    -> MemberSelector(Selector=Position) => #53
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=dorsal_eye)
    -> MemberSelector(Selector=Position) => #55
    #53, #55 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        #@returns(Point2f)
        @returns(float)
        def process(value):
          dx,dy = value.Item1.X,value.Item1.Y
          vx,vy = value.Item2.X,value.Item2.Y
          distance = math.sqrt((dx-vx)**2+(dy-vy)**2)
          #distance = abs(dy-vy)
          return distance
    -> BehaviorSubject VD => #58
    SubscribeSubject VDF => #59
    #58, #59 -> CombineLatest
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        import math
        @returns(float)
        def process(value):
          if math.isnan(value.Item1):
              a = value.Item2
              return a
          else:
              return value.Item1
    -> BehaviorSubject VDdistance

    Disable Condition NaNFilter
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import math
            @returns(bool)
            def process(value):
              if math.isnan(value.X) or math.isnan(value.Y) :
                  return False
              else:
                  return True
        -> WorkflowOutput

    SubscribeSubject VD
    -> Condition NaNFilter
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import math
            @returns(bool)
            def process(value):
              if math.isnan(value):
                  return False
              else:
                  return True
        -> WorkflowOutput
    -> BehaviorSubject VDF

    SubscribeSubject VDdistance => #67
    SubscribeSubject VDdistance
    -> Bonsai.Dsp.Difference(Order=1) => #69
    #67, #69 -> Zip => #70
    SubscribeSubject VDThreshold => #71
    SubscribeSubject VDDIfferenceThreshold => #72
    #70, #71, #72 -> CombineLatest
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(bool)
        def process(value):
           if math.isnan(float(value[1])):
                vdth = 100
           else:
                vdth = value[1]
           if math.isnan(float(value[2])):
                diffth = 7
           else:
                diffth = value[2]
           if (value[0].Item1<vdth) or abs(value[0].Item2)>diffth:
              return True
           else:
              return False
    -> BehaviorSubject BlinkState
-> MemberSelector(Selector=Item2)
-> PublishSubject LeftPupil => #57
-> Disable MemberSelector(Selector=X) => #58
#57 -> Disable MemberSelector(Selector=Y) => #59
#58, #59 -> Disable Zip => #60
-> Disable Skip(Count=1) => #61
#61, #60 -> Disable Zip
-> Disable Bonsai.Scripting.IronPython.PythonTransform "Eye Movement"
  Script:
    import math
    @returns(float)
    def process(value):
      pre_x,pre_y = value.Item1
      x,y         = value.Item2
      dx = x - pre_x
      dy = y - pre_y
      magnitude = math.sqrt(dx**2+dy**2)
      return magnitude
-> Disable BehaviorSubject EM
#55 -> MemberSelector(Selector=Item1)
-> PublishSubject LeftPupilArea

Disable SubscribeSubject MousePupil
-> Disable Bonsai.Scripting.IronPython.PythonTransform
  Script:
    import clr
    clr.AddReference("OpenCV.Net")
    from OpenCV.Net import *
    @returns(Point2f)
    def process(value):
      x = value.Item1
      y = value.Item2
      return Point2f(x,y)
-> Disable PublishSubject LeftPupil

SubscribeSubject ID_HeadRIGHT
-> PropertyMapping(FileName) => #71
SubscribeSubject CameraRight => #72
#71, #72 -> Bonsai.FFmpeg.VideoWriter
  FileName=Tsh001\\Tsh001_H_R_.avi
  Suffix=Timestamp
  Overwrite=false
  FrameRate=60
  OutputArguments="-c:v h264_nvenc -vsync 0 -2pass 0 -bf:v 0 -qp 24 -preset llhp -b:v 6M -rc:v cbr"
SubscribeSubject ID_EyeRIGHT
-> PropertyMapping(FileName) => #75
#72 -> Bonsai.Vision.Crop(RegionOfInterest(X=1273, Y=657, Width=576, Height=529)) => #76
#75, #76 -> Bonsai.FFmpeg.VideoWriter
  FileName=Tsh001\\Tsh001_E_R_.avi
  Suffix=Timestamp
  Overwrite=false
  FrameRate=60
  OutputArguments="-c:v h264_nvenc -vsync 0 -2pass 0 -bf:v 0 -qp 24 -preset llhp -b:v 6M -rc:v cbr"
-> ObserveOn(Scheduler=TaskPoolScheduler)
-> Slice(Start=0, Step=5, Stop=nil)
-> GroupWorkflow LiveTrackEllipse
    WorkflowInput Source1
    -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr)
    -> Bonsai.DeepLabCut.PredictPose => #2
      ModelFileName=X:\Experimental_Data\EyeHeadCoupling_RatTS_server\EyeTrackingDLC\DLC_Eye_resnet_50_iteration-0_shuffle-1\snapshot-1800000.pb
      PoseConfigFileName=X:\Experimental_Data\EyeHeadCoupling_RatTS_server\EyeTrackingDLC\DLC_Eye_resnet_50_iteration-0_shuffle-1\pose_cfg.yaml
      MinConfidence=0.6
      ScaleFactor=0.8
      ColorConversion=Bgr2Rgb
    -> Bonsai.DeepLabCut.GetBodyPart(Name=anterior_pupil)
    -> MemberSelector(Selector=Position) => #4
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=dorsal_pupil)
    -> MemberSelector(Selector=Position) => #6
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=posterior_pupil)
    -> MemberSelector(Selector=Position) => #8
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=ventral_pupil)
    -> MemberSelector(Selector=Position) => #10
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=anterior_dorsal_pupil)
    -> MemberSelector(Selector=Position) => #12
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=anterior_ventral_pupil)
    -> MemberSelector(Selector=Position) => #14
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=posterior_dorsal_pupil)
    -> MemberSelector(Selector=Position) => #16
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=posterior_ventral_pupil)
    -> MemberSelector(Selector=Position) => #18
    #4, #6, #8, #10, #12, #14, #16, #18 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform "Ellipse Fitting" => #20
      Script:
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        from System import Array
        @returns(RotatedRect) # To know more about this return type, go to https://horizongir.github.io/opencv.net/api/OpenCV.Net.RotatedRect.html
        def process(value):
           points = Array.CreateInstance(int,len(value),2); #Create a 2D array to hold the co-ordinates of 8 points
           LastValidIndex = None # In case of one or more coordinates are NaN, use the last valid index
           for i in range(0,len(value)):
              try:
                points[i,0]=int(value[i].X)
                points[i,1]=int(value[i].Y)
              except ValueError:
                if LastValidIndex is None:
                    points[i,0]=0
                    points[i,1]=0
                else:
                    points[i,0]=int(value[LastValidIndex].X)
                    points[i,1]=int(value[LastValidIndex].Y)
                continue
              LastValidIndex = i
           points_cv = Mat.FromArray(points) # Convert points array to CVHandle object type Mat
           rct= CV.FitEllipse2(points_cv) # Fit ellipse. This returns rotated rect object.
           #x = rct.Center
           return rct
    -> MemberSelector(Selector=Size)
    -> Bonsai.Scripting.IronPython.PythonTransform Area => #22
      Script:
        import math
        @returns(float)
        def process(value):
          area = math.pi * value.Width*value.Height

          return area
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=anterior_eye)
    -> MemberSelector(Selector=Position) => #24
    -> MemberSelector(Selector=X)
    -> Bonsai.Dsp.FirFilter => #26
      Anchor=-1
      Kernel: 0.0003,0.0005,0.0009,0.0016,0.0027,0.0045,0.0071,0.0109,0.0159,0.0223,0.03,0.0389,0.0484,0.0579,0.0666,0.0736,0.0781,0.0797,0.0781,0.0736,0.0666,0.0579,0.0484,0.0389,0.03,0.0223,0.0159,0.0109,0.0071,0.0045,0.0027,0.0016,0.0009,0.0005,0.0003
    #24 -> MemberSelector(Selector=Y)
    -> Bonsai.Dsp.FirFilter => #28
      Anchor=-1
      Kernel: 0.0003,0.0005,0.0009,0.0016,0.0027,0.0045,0.0071,0.0109,0.0159,0.0223,0.03,0.0389,0.0484,0.0579,0.0666,0.0736,0.0781,0.0797,0.0781,0.0736,0.0666,0.0579,0.0484,0.0389,0.03,0.0223,0.0159,0.0109,0.0071,0.0045,0.0027,0.0016,0.0009,0.0005,0.0003
    #26, #28 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform => #30
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(Point2f)
        def process(value):
          return Point2f(value[0],value[1])
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=posterior_eye)
    -> MemberSelector(Selector=Position) => #32
    -> MemberSelector(Selector=X)
    -> Bonsai.Dsp.FirFilter => #34
      Anchor=-1
      Kernel: 0.0003,0.0005,0.0009,0.0016,0.0027,0.0045,0.0071,0.0109,0.0159,0.0223,0.03,0.0389,0.0484,0.0579,0.0666,0.0736,0.0781,0.0797,0.0781,0.0736,0.0666,0.0579,0.0484,0.0389,0.03,0.0223,0.0159,0.0109,0.0071,0.0045,0.0027,0.0016,0.0009,0.0005,0.0003
    #32 -> MemberSelector(Selector=Y)
    -> Bonsai.Dsp.FirFilter => #36
      Anchor=-1
      Kernel: 0.0003,0.0005,0.0009,0.0016,0.0027,0.0045,0.0071,0.0109,0.0159,0.0223,0.03,0.0389,0.0484,0.0579,0.0666,0.0736,0.0781,0.0797,0.0781,0.0736,0.0666,0.0579,0.0484,0.0389,0.03,0.0223,0.0159,0.0109,0.0071,0.0045,0.0027,0.0016,0.0009,0.0005,0.0003
    #34, #36 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform => #38
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(Point2f)
        def process(value):
          return Point2f(value[0],value[1])
    #30, #38 -> Zip
    -> Disable BehaviorSubject "AP Axis"
    -> IncludeWorkflow Origin_R(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> Bonsai.Scripting.IronPython.PythonTransform Origin => #42
      Script:
        #def intersection(x1,y1,x2,y2,x3,y3,x4,y4):
        #  x = ((x1*y2-y1*x2)*(x3-x4) - (x1-x2)*(x3*y4-y3*x4))/((x1-x2)*(y3-y4) - (y1-y2)*(x3-x4))
        #  y = ((x1*y2-y1*x2)*(y3-y4)-(y1-y2)*(x3*y4-y3*x4))/((x1-x2)*(y3-y4) - (y1-y2)*(x3-x4))
        #  return x,y
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(Point2f)
        def process(value):
          x1=value[0].X
          y1=value[0].Y
          x2=value[1].X
          y2=value[1].Y
          #x3=value[2].X
          #y3=value[2].Y
          #x4=value[3].X
          #y4=value[3].Y
         # try:
         #   x = ((x1*y2-y1*x2)*(x3-x4)-(x1-x2)*(x3*y4-y3*x4))/((x1-x2)*(y3-y4)-(y1-y2)*(x3-x4))
         #   y = ((x1*y2-y1*x2)*(y3-y4)-(y1-y2)*(x3*y4-y3*x4))/((x1-x2)*(y3-y4)-(y1-y2)*(x3-x4))
         #   return Point2f(x,y)
         # except ValueError or ZeroDivisionError:
         #   return Point2f(0,0)
         # return Point2f(0,0)

          try:
            x = (x1+x2)/2;
            y = (y1+y2)/2;
            return Point2f(x,y)
          except ValueError or ZeroDivisionError:
            return Point2f(float("nan"),float("nan"))
          return Point2f(float("nan"),float("nan"))
    -> Condition NaNFilter => #43
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import math
            @returns(bool)
            def process(value):
              if math.isnan(value.X) or math.isnan(value.Y) :
                  return False
              else:
                  return True
        -> WorkflowOutput
    #42, #43 -> CombineLatest
    -> Bonsai.Scripting.IronPython.PythonTransform => #45
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(Point2f)
        def process(value):
          if math.isnan(value.Item1.X) or math.isnan(value.Item1.Y):
              return value.Item2
          else:
              return value.Item1
    #20 -> MemberSelector(Selector=Center)
    -> IncludeWorkflow Center_R(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil) => #47
    #45, #47 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform "Eye-Centered Center" => #49
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(Point2f)
        def process(value):
          ox = value[0].X
          oy = value[0].Y
          cx = value[1].X
          cy = value[1].Y
          x = cx-ox
          y = cy-oy
          if(math.isnan(x) or math.isnan(y)):
              return Point2f(float("nan"),float("nan"))
          else:
              return Point2f(x,y)
    #22, #49 -> Zip
    -> WorkflowOutput
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=ventral_eye)
    -> MemberSelector(Selector=Position) => #53
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=dorsal_eye)
    -> MemberSelector(Selector=Position) => #55
    #53, #55 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        #@returns(Point2f)
        @returns(float)
        def process(value):
          dx,dy = value.Item1.X,value.Item1.Y
          vx,vy = value.Item2.X,value.Item2.Y
          distance = math.sqrt((dx-vx)**2+(dy-vy)**2)
          #distance = abs(dy-vy)
          return distance
    -> BehaviorSubject VD_R => #58
    SubscribeSubject VDF_R => #59
    #58, #59 -> CombineLatest
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        import math
        @returns(float)
        def process(value):
          if math.isnan(value.Item1):
              a = value.Item2
              return a
          else:
              return value.Item1
    -> BehaviorSubject VDdistance_R

    Disable Condition NaNFilter
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import math
            @returns(bool)
            def process(value):
              if math.isnan(value.X) or math.isnan(value.Y) :
                  return False
              else:
                  return True
        -> WorkflowOutput

    SubscribeSubject VD_R
    -> Condition NaNFilter
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import math
            @returns(bool)
            def process(value):
              if math.isnan(value):
                  return False
              else:
                  return True
        -> WorkflowOutput
    -> BehaviorSubject VDF_R

    SubscribeSubject VDdistance_R => #67
    SubscribeSubject VDdistance_R
    -> Bonsai.Dsp.Difference(Order=1) => #69
    #67, #69 -> Zip => #70
    SubscribeSubject VDThreshold => #71
    SubscribeSubject VDDIfferenceThreshold => #72
    #70, #71, #72 -> CombineLatest
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        @returns(bool)
        def process(value):
           if math.isnan(float(value[1])):
                vdth = 100
           else:
                vdth = value[1]
           if math.isnan(float(value[2])):
                diffth = 7
           else:
                diffth = value[2]
           if (value[0].Item1<vdth) or abs(value[0].Item2)>diffth:
              return True
           else:
              return False
    -> BehaviorSubject BlinkState_R
-> MemberSelector(Selector=Item2)
-> Disable GroupWorkflow LiveTrackOld
    WorkflowInput Source1
    -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr)
    -> Bonsai.DeepLabCut.PredictPose => #2
      ModelFileName=X:\Experimental_Animals\Rat_Server\EyeTracking\DLC_Eye_resnet_50_iteration-0_shuffle-1\snapshot-1500000.pb
      PoseConfigFileName=X:\Experimental_Animals\Rat_Server\EyeTracking\DLC_Eye_resnet_50_iteration-0_shuffle-1\pose_cfg.yaml
      MinConfidence=0.5
      ScaleFactor=0.5
      ColorConversion=Bgr2Rgb
    -> Bonsai.DeepLabCut.GetBodyPart(Name=anterior_pupil)
    -> MemberSelector(Selector=Position) => #4
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=dorsal_pupil)
    -> MemberSelector(Selector=Position) => #6
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=posterior_pupil)
    -> MemberSelector(Selector=Position) => #8
    #2 -> Bonsai.DeepLabCut.GetBodyPart(Name=ventral_pupil)
    -> MemberSelector(Selector=Position) => #10
    #4, #6, #8, #10 -> Zip
    -> Add => #12
    -> MemberSelector(Selector=X)
    -> Divide(Operand=FloatProperty(Value=4))
    -> BufferCount(Count=7, Skip=1)
    -> Add
    -> Divide(Operand=FloatProperty(Value=7))
    -> GroupWorkflow Pupil_RIGHT_x => #18
        WorkflowInput Source1
        -> WorkflowOutput
    #12 -> MemberSelector(Selector=Y)
    -> Divide(Operand=FloatProperty(Value=4))
    -> BufferCount(Count=7, Skip=1)
    -> Add
    -> Divide(Operand=FloatProperty(Value=7))
    -> GroupWorkflow Pupil_RIGHT_y => #24
        WorkflowInput Source1
        -> WorkflowOutput
    #18, #24 -> WithLatestFrom
    -> IncludeWorkflow Pupil_R(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
    -> WorkflowOutput
-> PublishSubject "Right Pupil"
